PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = TBPMnBack
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Routines
  Routine Feedback
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        msg='';
      Begin Routine:
        if stimFile == one_back and respPractice = 'y' {
              msg="Correct! RT=" + resp.rt.toFixed(3);  }
         elif stimFile != one_back and respPractice = 'y' {
              msg="Correct! RT=" + resp.rt.toFixed(3);}
        else      msg="Oops! That was wrong"; }
  Routine Welcome_Screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bem vindo.
        Leia as instrucoes no papel.
    KeyboardComponent key_resp_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsPractice
    TextComponent textPractice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Você deve pressionar a tecla de espaço se a imagem na tela for a mesma da imagem imediatamente anterior.
        You must press the space key if the image on the screen is the same as the immediately previous image.
        You must press the M key to reset the clock each time one minute passes.
        To find out how much time has passed since you started to see the images you can press the z key.
    KeyboardComponent key_resp_3
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsExperiment
    TextComponent textExperiment
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Você deve pressionar a tecla de espaço se a imagem na tela for a mesma da imagem imediatamente anterior.
        You must press the space key if the image on the screen is the same as the immediately previous image.
        You must press the M key to reset the clock each time one minute passes.
        To find out how much time has passed since you started to see the images you can press the z key.
    KeyboardComponent key_resp_4
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceTrial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # Set a junk value for the first trial, as by definition we can't # have a one-back value there:
        one_back = 'Not applicable'
      Begin Routine:
        x = randint(low = 10, high = 20)
        myClock = core.Clock()  # Create the clock
        myClock.reset()  # At the relevant time, reset the clock to zero e.g., at beginning of a routine/trial
        myClock.getTime()
        # set whatever keypress values are appropriate for this trial:
        if stimFile == one_back:
            correct_response = 'y'
        else:
            correct_response = 'n'
      End Routine:
        one_back = stimFile
    KeyboardComponent respPractice
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .7
      units = height
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    NoiseStimComponent noise
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = x
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  Routine Thanks
    TextComponent textThanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Obrigado
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  Routine experimentTrial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        x = randint(low = 10, high = 20)
    ImageComponent image_2
      image = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    NoiseStimComponent noise_2
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = x
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Flow
  Routine Welcome_Screen
  Routine InstructionsPractice
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = practiceBlock.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', 'stims/001.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/002.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/003.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/004.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/005.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/006.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/007.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/008.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/009.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/010.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/011.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/012.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/013.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/014.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/015.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/016.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/017.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/018.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/019.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/020.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/021.i.jpg'), ('Valence', 'Practice')])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
    Routine practiceTrial
    Routine Feedback
  LoopTerminator Practice
  Routine InstructionsExperiment
  LoopInitiator ExperimentalBlocks loopType="TrialHandler"
    conditionsFile = chooseBlock.csv
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine experimentTrial
    LoopTerminator trials
  LoopTerminator ExperimentalBlocks
  Routine Thanks
